PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = accent2
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.
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      text:
        Welcome to the study!

        This study has two parts. In the first part you will have to categorize words upon hearing them, while in the second part you will listen and make judgments about short passages.


        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Part1
    TextComponent p1_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 1

        In this first part of the study you will hear words that are either living or non-living things. For living things press "A" and for non-living things press "L". This is a study measuring response time, so try to be as fast as possible. If you make an error you can correct yourself and the button you pressed last will be recorded.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine words
    KeyboardComponent word_resp
      allowedKeys = 'a', 'l'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    SoundComponent wordlist
      sound [set every repeat] = words.xlsx
      startVal [time (s)] = 0.0
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  Routine passages
    SoundComponent passagelist
      sound [set every repeat] = passages.xlsx
      startVal [time (s)] = 0.0
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    SliderComponent belive
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent nice
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent smart
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent trustworthy
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Part2
    TextComponent p2_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 2

        In this part of the study you will hear three brief passages. After listening to each passage you will be asked several questions about the content and your impressions of it.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine samples
    SoundComponent sample_sounds
      sound [set every repeat] = samples.xlsx
      startVal [time (s)] = 0.0
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    TextComponent origin
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Where do you think this speaker is from?
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    TextComponent first_lang
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = What do you think is this speaker's first langauge?
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    TextComponent recognize
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Do you recognize this speaker?
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  Routine thankyou
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for your participation. Your responses have been recorded.
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Flow
  Routine Welcome
  Routine Part1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 'shellfish', 'condition': 'living', 'correct': 'a', 'words': 'words/shellfish_NZ.wav'},
      {'target': 'bloodhound', 'condition': 'living', 'correct': 'a', 'words': 'words/bloodhound_NZ.wav'},
      {'target': 'antelope', 'condition': 'living', 'correct': 'a', 'words': 'words/antelope_NZ.wav'},
      {'target': 'woodpecker', 'condition': 'living', 'correct': 'a', 'words': 'words/woodpecker_NZ.wav'},
      {'target': 'swordfish', 'condition': 'living', 'correct': 'a', 'words': 'words/swordfish_NZ.wav'},
      {'target': 'parakeet', 'condition': 'living', 'correct': 'a', 'words': 'words/parakeet_NZ.wav'},
      {'target': 'walrus', 'condition': 'living', 'correct': 'a', 'words': 'words/walrus_NZ.wav'},
      {'target': 'tortoise', 'condition': 'living', 'correct': 'a', 'words': 'words/tortoise_NZ.wav'},
      {'target': 'caterpillar', 'condition': 'living', 'correct': 'a', 'words': 'words/caterpillar_NZ.wav'},
      {'target': 'piranha', 'condition': 'living', 'correct': 'a', 'words': 'words/piranha_NZ.wav'},
      {'target': 'chimpanzee', 'condition': 'living', 'correct': 'a', 'words': 'words/chimpanzee_NZ.wav'},
      {'target': 'gazelle', 'condition': 'living', 'correct': 'a', 'words': 'words/gazelle_NZ.wav'},
      {'target': 'seagull', 'condition': 'living', 'correct': 'a', 'words': 'words/seagull_NZ.wav'},
      {'target': 'catfish', 'condition': 'living', 'correct': 'a', 'words': 'words/catfish_NZ.wav'},
      {'target': 'critter', 'condition': 'living', 'correct': 'a', 'words': 'words/critter_NZ.wav'}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
    Routine words
  LoopTerminator trials
  Routine Part2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = passages.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 'coffee', 'condition': 'US', 'passagefile': 'passages/NewZealand_coffee.wav'},
      {'target': 'ants', 'condition': 'US', 'passagefile': 'passages/NewZealand_ants.wav'},
      {'target': 'romans', 'condition': 'US', 'passagefile': 'passages/NewZealand_romans.wav'},
      {'target': 'otzi', 'condition': 'US', 'passagefile': 'passages/NewZealand_otzi.wav'},
      {'target': 'kocs', 'condition': 'US', 'passagefile': 'passages/NewZealand_kocs.wav'},
      {'target': 'coffee', 'condition': 'NZ', 'passagefile': 'passages/American_coffee.wav'},
      {'target': 'ants', 'condition': 'NZ', 'passagefile': 'passages/American_ants.wav'},
      {'target': 'romans', 'condition': 'NZ', 'passagefile': 'passages/American_romans.wav'},
      {'target': 'otzi', 'condition': 'NZ', 'passagefile': 'passages/American_otzi.wav'},
      {'target': 'kocs', 'condition': 'NZ', 'passagefile': 'passages/American_kocs.wav'},
      {'target': 'coffee', 'condition': 'TR', 'passagefile': 'passages/Turkish_coffee.wav'},
      {'target': 'ants', 'condition': 'TR', 'passagefile': 'passages/Turkish_ants.wav'},
      {'target': 'romans', 'condition': 'TR', 'passagefile': 'passages/Turkish_romans.wav'},
      {'target': 'otzi', 'condition': 'TR', 'passagefile': 'passages/Turkish_otzi.wav'},
      {'target': 'kocs', 'condition': 'TR', 'passagefile': 'passages/Turkish_kocs.wav'}]
    Routine passages
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = samples/samples.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 'US', 'samplefile': 'samples/US_Coffee_sample.wav'},
      {'target': 'NZ', 'samplefile': 'samples/NZ_Coffee_sample.wav'},
      {'target': 'TR', 'samplefile': 'samples/TR_Coffee_sample.wav'}]
    Routine samples
  LoopTerminator trials_3
  Routine thankyou
